<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>PlayStimulus</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-135</Left>
              <Right>135</Right>
              <Bottom>-45</Bottom>
              <Top>45</Top>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <FaceSize xsi:nil="true" />
              <ClearColor>Gray</ClearColor>
              <Width>1024</Width>
              <Height>1024</Height>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Environment</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stimuli</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:LastOrDefault" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>