<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>SyncQuad</Name>
        <Append>false</Append>
        <Overwrite>false</Overwrite>
        <Suffix>None</Suffix>
        <FileName />
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="PublishSubject">
        <Name>Tick</Name>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateViewportState">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Width>1</gl:Width>
          <gl:Height>1</gl:Height>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>0</Left>
        <Right>1</Right>
        <Bottom>0</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Seed" />
        <Property Name="P" />
        <Property Name="Offset" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Tick</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndTrial</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartTrial</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SyncSequence">
          <p1:Seed>0</p1:Seed>
          <p1:P>1</p1:P>
          <p1:Offset>30</p1:Offset>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialID</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>{0},{1}</Format>
        <Selector>Item1,Item2.TrialID</Selector>
        <Name>SyncQuad</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" Selector="Item1" />
          <Property Name="ColorG" Selector="Item1" />
          <Property Name="ColorB" Selector="Item1" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>0.1</ExtentX>
        <ExtentY>0.3</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <ColorR>0.5</ColorR>
        <ColorG>0.5</ColorG>
        <ColorB>0.5</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="25" Label="Source1" />
      <Edge From="8" To="14" Label="Source2" />
      <Edge From="9" To="13" Label="Source2" />
      <Edge From="10" To="15" Label="Source2" />
      <Edge From="11" To="20" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="16" To="22" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>